PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  HTML path = result/
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1200, 800]
  color = white
  expName = exp1
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Routines
  Routine term_and_condition
    TextComponent text
      color = black
      letterHeight = 0.015
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Monash University
        Study on visual experience
        Investigators:
           Prof. Naotsugu Tsuchiya, Monash University, Australia    (naotsugu.tsuchiya@monash.edu)
           Dr Ariel Zeleznikow-Johnston, Monash University, Australia    (Ariel.Zeleznikow-Johnston@monash.edu)
           Mr Yusuke Miyashita, Monash University, Australia    (ymiy0005@student.monash.edu)
        Hello! Thank you for your interest in our study.

        This experiment will take approximately 10 minutes of your time. Don't worry! Further instructions will be provided before the experiment starts, and you get three practice trials.

        All data will be kept confidential. If you have any question at this stage, please contact the investigators above.

        Click here for a detailed version of the participant information sheet
        1. Your consent
        This participant information sheet contains detailed information about the research project. Its purpose is to explain to you all the procedures involved in this project before you decide whether or not to take part in it. Please read this carefully. Feel free to ask questions about any information in the document. If you wish to discuss the project with a relative or friend or your local health worker, please do so.
        Once you understand what the project is about and if you agree to take part in it, you will be asked to read and accept the Consent Form (next page). By accepting the Consent Form, you indicate that you understand the information and that you give your consent to participate in the research project.
        2. Purpose of the study
        The aim of this study is to examine the spacial experience of human perception.
        3. What will happen to me if I participate in the study?
        You will complete an online visual perceptual task. During this task, you will be shown images and asked to make responses.
        All results will be de-identified at the time of examination. Please ensure you understand and accept this before providing informed consent.
        5. Possible risks
        If you begin to feel fatigued during the study you may take a break and return to the testing a little bit later. If you find the testing too frustrating you may stop that test altogether. You may discontinue your participation in the study at any time. Your personal information will be kept confidential as outlined in Section
        4. Use of data for other projects
        Data from this research project may be re-used for other related projects in a de-identified manner. Information identifying you will only be available to the researchers involved in the particular study and will not be identifiable when reported
        9. Results of Project
        If you would like, the results of the study can be sent to you by newsletter or summary format. It is important to know that results may not be known until well after your participation in the study is completed
        10. Further Information or Any Problems
        If you require further information or if you have any problems concerning this project, you can contact the researchers above.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2.0
      store = nothing
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    TextComponent text_2
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 2.0
      text = Ready to start? Please press [space] to begin the experiment.
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  Routine calibration
    ImageComponent image
      image = Calibration.PNG
      pos = (0, 0.15)
      saveStartStop = False
      size = (0.65, 0.7)
      startVal [time (s)] = 0.0
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    TextComponent text_3
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 2.0
      text = Press [y] to move to next step
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    KeyboardComponent key_resp_2
      allowedKeys = 'y'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
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    TextComponent text_11
      color = black
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
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      text:
        Calibration step:
        Adjust your head position until you see your thumb has a similar width with the black line at the center of the screen.
  Routine instruction
    TextComponent text_4
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 2.0
      text = press 'space' to move to next step
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2.0
      store = nothing
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    MovieComponent movie
      backend = moviepy
      forceEndRoutine = False
      movie = psychopy.gif
      startVal [time (s)] = 0.0
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  Routine memory_inst
    TextComponent text_5
      color = black
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        No memory instruction

        Please note that we are not interested in your memory of the exact location of the dots. We are interested in your experience at the moment that you were seeing the display.
    TextComponent text_6
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 2.0
      text = press [y] to move to next experiment
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    KeyboardComponent key_resp_4
      allowedKeys = 'm'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2.0
      store = nothing
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  Routine reproduction_inst
    TextComponent text_7
      color = black
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        No reproduction instruction

        Please note that we are not interested in your ability to reproduce the exact location of the dots later. We are interested in your experience at the moment that you were seeing the display.
    TextComponent text_8
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 2
      text = press [space] to move to next step
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    KeyboardComponent key_resp_5
      allowedKeys = 'r'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
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  Routine start_trial
    TextComponent text_9
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = press [s] to start trial
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    KeyboardComponent key_resp_6
      allowedKeys = 's'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine stimuli
    ImageComponent image_2
      image = data\4.jpg
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine survey1
    TextComponent text_10
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Did you see each location of the dots?

        Press [y] for YES, [n] for NO
    KeyboardComponent key_resp_7
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine term_and_condition
  Routine calibration
  Routine instruction
  Routine memory_inst
  Routine reproduction_inst
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 20
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    Routine start_trial
    Routine stimuli
    Routine survey1
  LoopTerminator trials
