PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = RandomDots
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Routines
  Routine trial
    ImageComponent image
      image = data\1(6).jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.0
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  Routine Instruction
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.3
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      text:
        Yusuke's first Psychopy

        Press "space" key to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.3
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  Routine survey1_3
    TextComponent survey1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = How many dots dit you see?
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      anchor = bottom-right
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      startVal [time (s)] = 0
      text = Next trial
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Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
    Routine survey1_3
  LoopTerminator trials
